/////////////////////////////////////////////////////////////////////////////////////////////////////////////
// prostate_arfi_histeq.ijm
/////////////////////////////////////////////////////////////////////////////////////////////////////////////
// Histogram equialize raw ARFI image stacks generated post-scan-conversion
// The hist eq is run twice, each time with the histogram generated from the entire stack, not image-by-image
/////////////////////////////////////////////////////////////////////////////////////////////////////////////
// Mark Palmeri
// mlp6@duke.edu
// 2013-07-09
/////////////////////////////////////////////////////////////////////////////////////////////////////////////
open("./ARFI_Norm.nii.gz");
run("Enhance Contrast...", "saturated=1 normalize equalize process_all use");
//run("Enhance Contrast...", "saturated=1 normalize equalize process_all use");
run("NIfTI-1", "save=./ARFI_Norm_HistEq.nii");
